PsychoPy2experiment version="2021.2.3"
Settings
  Experiment info = {'participant':'', 'session':'001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = (1024, 768)
  expName = sentPlausibility
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Routines
  Routine showSentence
    TextComponent sentence
      letterHeight = 0.1
      startVal [time (s)] = 1
      stopVal [duration (s)] = 2.5
      text [set every repeat] = $sentenceContent
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    TextComponent fixationCross
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
      text = +
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    KeyboardComponent sentenceResp
      allowedKeys = 'y','n'
      forceEndRoutine = True
      startVal [time (s)] = 1
      stopVal [duration (s)] = 4
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  Routine instructions
    ImageComponent instr
      image = instuctions.png
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
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    KeyboardComponent confirm
      allowedKeys = 'y'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine native
    TextComponent isNative
      letterHeight = 0.1
      startVal [time (s)] = 0.0
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      text:
        Do you consider yourself to be a native speaker of English?

        Press 'y' for yes, 'n' for no.
    KeyboardComponent isNativeResp
      allowedKeys = 'y','n'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine practiceInfo
    TextComponent text
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 5
      text = Now you will be presented with a practice trial.
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    TextComponent text_2
      letterHeight = 0.1
      startVal [time (s)] = 5
      stopVal [duration (s)] = 3
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  Routine practice1
    TextComponent practice1Cross
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
      text = +
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    TextComponent practice1Text
      letterHeight = 0.1
      startVal [time (s)] = 1
      stopVal [duration (s)] = 5
      text = The driver crashed the car.
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    KeyboardComponent practice1Resp
      allowedKeys = 'y','n'
      forceEndRoutine = True
      startVal [time (s)] = 1
      stopVal [duration (s)] = 10
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    CodeComponent code
      Code Type = Py
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      Begin Experiment:
        message1 = "empty message"
        message2 = "empty message"
      End Routine:
        if practice1Resp.keys == 'y':
            message1 = "Your response was: 'yes'. Now let's try one more round."
        else:
            message1 = "Your answer was incorrect. Please talk to Dan about the instructions."
  Routine feedback1
    TextComponent feedback1Text
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 5
      text [set every repeat] = $message1
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    TextComponent feedback1Blank
      letterHeight = 0.1
      startVal [time (s)] = 5
      stopVal [duration (s)] = 3
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  Routine practice2
    TextComponent practice2Cross
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
      text = +
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    TextComponent practice2Text
      letterHeight = 0.1
      startVal [time (s)] = 1
      stopVal [duration (s)] = 5
      text = The car drives the airplane.
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    KeyboardComponent practice2Resp
      allowedKeys = 'y','n'
      forceEndRoutine = True
      startVal [time (s)] = 1
      stopVal [duration (s)] = 10
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    CodeComponent code_2
      Code Type = Py
      End Routine:
        if practice2Resp.keys == 'n':
            message2 = "Your response was: 'no', which is correct. The experiment will begin now."
        else:
            message2 = "Your answer was incorrect. Please talk to Dan about the instructions."
  Routine feedback2
    TextComponent feedback2Text
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 5
      text [set every repeat] = $message2
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    TextComponent feedback2Blank
      letterHeight = 0.1
      startVal [time (s)] = 5
      stopVal [duration (s)] = 3
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  Routine debrief
    TextComponent debriefText
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 7
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      text:
        The experiment is over now. It will close in a few seconds.

        Thanks for participating!
  Routine readProb
    TextComponent hasReadProb
      letterHeight = 0.1
      startVal [time (s)] = 0.0
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      text:
        Do you experience any problems with reading?

        Press 'y' for yes, 'n' for no.
    KeyboardComponent hasReadProbResp
      allowedKeys = 'y','n'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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Flow
  Routine instructions
  Routine native
  Routine readProb
  Routine practiceInfo
  Routine practice1
  Routine feedback1
  Routine practice2
  Routine feedback2
  LoopInitiator sentenceLoop loopType="TrialHandler"
    conditionsFile = stimuliFiltered.xlsx
    loopType = random
    nReps = 1
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    conditions:
      [{'sentenceID': 1, 'isConcordant': True, 'sentenceType': 'transitive', 'isPlausible': True, 'sentenceContent': 'The teacher opened the box. '},
      {'sentenceID': 2, 'isConcordant': True, 'sentenceType': 'transitive', 'isPlausible': False, 'sentenceContent': 'The box opened the teacher.'},
      {'sentenceID': 3, 'isConcordant': True, 'sentenceType': 'transitive', 'isPlausible': True, 'sentenceContent': 'The leaves clogged the pipe.'},
      {'sentenceID': 4, 'isConcordant': True, 'sentenceType': 'transitive', 'isPlausible': False, 'sentenceContent': 'The pipe clogged the leaves.'},
      {'sentenceID': 5, 'isConcordant': True, 'sentenceType': 'transitive', 'isPlausible': True, 'sentenceContent': 'The waiter poured the wine.'},
      {'sentenceID': 6, 'isConcordant': True, 'sentenceType': 'transitive', 'isPlausible': False, 'sentenceContent': 'The wine poured the waiter.'},
      {'sentenceID': 7, 'isConcordant': True, 'sentenceType': 'transitive', 'isPlausible': True, 'sentenceContent': 'The baker dissolved the sugar.'},
      {'sentenceID': 8, 'isConcordant': True, 'sentenceType': 'transitive', 'isPlausible': False, 'sentenceContent': 'The sugar dissolved the baker.'},
      {'sentenceID': 9, 'isConcordant': True, 'sentenceType': 'transitive', 'isPlausible': True, 'sentenceContent': 'The heat softened the butter.'},
      {'sentenceID': 10, 'isConcordant': True, 'sentenceType': 'transitive', 'isPlausible': False, 'sentenceContent': 'The butter softened the heat.'}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
    Routine showSentence
  LoopTerminator sentenceLoop
  Routine debrief
